[
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "2",
        "object.label": "cistem - ctffind4",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputType": 1,
        "inputMicrographs": "6378.outputMicrographs",
        "avgFrames": 3,
        "usePowerSpectra": false,
        "windowSize": 512,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 500.0,
        "slowSearch": false,
        "fixAstig": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 8
    },
    {
        "object.className": "smartscopeConnection",
        "object.id": "60",
        "object.label": "smartscope - Smartscope connection",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputMovies": "95.outputMovies",
        "sessionName": "~Smartscope Session Name|''|0|sessionName~",
        "refreshTime": 240,
        "TotalTime": 86400,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1
    },
    {
        "object.className": "ProtImportMovies",
        "object.id": "95",
        "object.label": "pwem - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "~Movie's folder|%(HOME)s|2|moviesPath~",
        "filesPattern": "~files pattern|*.tif|2|moviesPath~",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": "~voltage|200.0|4|vol~",
        "sphericalAberration":"~spherical Aberration|2.7|4|sphericalAberration~",
        "amplitudeContrast": 0.1,
        "magnification": "~Magnification|50000|3|mag~",
        "samplingRateMode": 0,
        "samplingRate": "~Sampling Rate|0.907|4|sampling~",
        "scannedPixelSize": 7.0,
        "doseInitial":"~doseInitial|0.0|4|doseInitial~",
        "dosePerFrame": "~doseInitial|1.0|4|doseInitial~",
        "gainFile": "~Gain file|%(HOME)s|2|gainFile~",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": "43200",
        "fileTimeout": "30",
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "159",
        "object.label": "motioncorr - movie alignment",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputMovies": "60.MoviesSS",
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 60,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "splitEvenOdd": false,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "extraProtocolParams": "",
        "gpuList": "0, 1",
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 1,
        "groupLocal": 4,
        "tol": 0.2,
        "doSaveUnweightedMic": false,
        "extraParams2": "",
        "gainRot": 1,
        "gainFlip": 1,
        "defectFile": null,
        "defectMap": null,
        "EERtext": null,
        "eerGroup": 32,
        "eerSampling": 0,
        "doMagCor": false,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "3841",
        "object.label": "ctf consensus",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "inputCTF": "2.outputCTF",
        "useDefocus": true,
        "minDefocus": "~minDefocus|4000.0|4|minDefocus~",
        "maxDefocus": "~maxDefocus|40000.0|4|maxDefocus~",
        "useAstigmatism": true,
        "astigmatism":  "~astigmatism|0.1|4|astigmatism~",
        "useAstigmatismPercentage": false,
        "astigmatismPer": 0.1,
        "useResolution": true,
        "resolution": "~resolution|5.0|4|resolution~",
        "useCritXmipp": false,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.0,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 9.0,
        "calculateConsensus": false,
        "minConsResol": 15.0,
        "averageDefocus": false,
        "includeSecondary": false,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1
    },
    {
        "object.className": "XmippProtMovieMaxShift",
        "object.id": "3979",
        "object.label": "xmipp3 - movie maxshift",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputMovies": "159.outputMovies",
        "rejType": 3,
        "maxFrameShift": "~maxFrameShift|10.0|4|maxFrameShift~",
        "maxMovieShift": "~maxMovieShift|30.0|4|maxMovieShift~",
    },
    {
        "object.className": "smartscopeFeedbackFilter",
        "object.id": "5233",
        "object.label": "smartscope - Feedback filter (6)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "inputProtocol": "60.",
        "triggerMicrograph": 100,
        "emptyBinsPercent": 1,
        "refreshTime": 240,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "inputGrids": "60.Grids",
        "inputHoles": "60.Holes",
        "inputMovies": "60.MoviesSS",
        "micsPassFilter": "3841.outputMicrographs"
    },
    {
        "object.className": "XmippProtTiltAnalysis",
        "object.id": "6378",
        "object.label": "xmipp3 - tilt analysis",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputMicrographs": "3979.outputMicrographsDoseWeighted",
        "autoWindow": true,
        "window_size": 1024,
        "objective_resolution": 3.0,
        "meanCorr_threshold": 0.5,
        "stdCorr_threshold": 0.1,
        "saveIntermediateResults": false,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1
    }
]
