[
       {
        "object.className": "ProtImportMovies",
        "object.id": "95",
        "object.label": "pwem - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "~Movie's folder|%(HOME)s|2|moviesPath~",
        "filesPattern": "~files pattern|*.tif|2|moviesPath~",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": "~voltage|200.0|4|vol~",
        "sphericalAberration":"~spherical Aberration|2.7|4|sphericalAberration~",
        "amplitudeContrast": 0.1,
        "magnification": "~Magnification|50000|3|mag~",
        "samplingRateMode": 0,
        "samplingRate": "~Sampling Rate|0.907|4|sampling~",
        "scannedPixelSize": 7.0,
        "doseInitial":"~doseInitial|0.0|4|doseInitial~",
        "dosePerFrame": "~doseInitial|1.0|4|doseInitial~",
        "gainFile": "~Gain file|%(HOME)s|2|gainFile~",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": "43200",
        "fileTimeout": "30",
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "67",
        "object.label": "cistem - ctffind",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputType": 1,
        "avgFrames": 3,
        "usePowerSpectra": false,
        "windowSize": 512,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 500.0,
        "slowSearch": false,
        "fixAstig": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 8,
        "inputMicrographs": "218.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "122",
        "object.label": "xmipp3 - ctf consensus 0",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useDefocus": false,
        "minDefocus": 4000.0,
        "maxDefocus": 40000.0,
        "useAstigmatism": false,
        "astigmatism": 1000.0,
        "useAstigmatismPercentage": false,
        "astigmatismPer": 0.1,
        "useResolution": true,
        "resolution": 8.0,
        "useCritXmipp": false,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.0,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 9.0,
        "calculateConsensus": false,
        "minConsResol": 15.0,
        "averageDefocus": false,
        "includeSecondary": false,
        "inputCTF": "67.outputCTF"
    },
    {
        "object.className": "smartscopeConnection",
        "object.id": "180",
        "object.label": "smartscope - Connection",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "sessionName": "~Smartscope Session Name|''|0|sessionName~",
        "refreshMethod": 0,
        "refreshTime": 240,
        "refreshMovies": 200,
        "TotalTime": 86400,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "218",
        "object.label": "motioncorr - movie alignment 0",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 60,
        "binFactor": 2.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "splitEvenOdd": false,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "extraProtocolParams": "",
        "gpuList": "0, 1",
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 1,
        "groupLocal": 4,
        "tol": 0.2,
        "doSaveUnweightedMic": false,
        "extraParams2": "",
        "gainRot": 0,
        "gainFlip": 1,
        "defectFile": null,
        "defectMap": null,
        "EERtext": null,
        "eerGroup": 32,
        "eerSampling": 0,
        "doMagCor": false,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "inputMovies": "286.outputMoviesSS"
    },
    {
        "object.className": "ProtSubSet",
        "object.id": "286",
        "object.label": "subset 0",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "chooseAtRandom": false,
        "nElements": 2,
        "selectIds": true,
        "range": "0-150",
        "setOperation": 0,
        "inputFullSet": "180.MoviesSS"
    },
    {
        "object.className": "ProtSubSet",
        "object.id": "326",
        "object.label": "subset A",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "chooseAtRandom": false,
        "nElements": 2,
        "selectIds": true,
        "range": "151-300",
        "setOperation": 0,
        "inputFullSet": "180.MoviesSS"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "366",
        "object.label": "cistem - ctffind",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputType": 1,
        "avgFrames": 3,
        "usePowerSpectra": false,
        "windowSize": 512,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 500.0,
        "slowSearch": false,
        "fixAstig": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 8,
        "inputMicrographs": "1115.outputMicrographs"
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "421",
        "object.label": "xmipp3 - ctf consensus A",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useDefocus": false,
        "minDefocus": 4000.0,
        "maxDefocus": 40000.0,
        "useAstigmatism": false,
        "astigmatism": 1000.0,
        "useAstigmatismPercentage": false,
        "astigmatismPer": 0.1,
        "useResolution": true,
        "resolution": 8.0,
        "useCritXmipp": false,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.0,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 9.0,
        "calculateConsensus": false,
        "minConsResol": 15.0,
        "averageDefocus": false,
        "includeSecondary": false,
        "inputCTF": "366.outputCTF"
    },
    {
        "object.className": "smartscopeFeedbackFilter",
        "object.id": "479",
        "object.label": "smartscope - Feedback filter 0",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocol": "1498.",
        "triggerMicrograph": 50,
        "emptyBinsPercent": 8,
        "simulator": true,
        "refreshMethod": 0,
        "refreshTime": 240,
        "refreshMics": 200,
        "micsPassFilter": "122.outputMicrographs",
        "micsAll": "218.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "ProtSubSet",
        "object.id": "522",
        "object.label": "subset C",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "chooseAtRandom": false,
        "nElements": 2,
        "selectIds": true,
        "range": "451-4335",
        "setOperation": 0,
        "inputFullSet": "180.MoviesSS"
    },
    {
        "object.className": "smartscopeSimulator",
        "object.id": "562",
        "object.label": "smartscope - Simulator B",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocol": "180.",
        "intensityRange": "4468.IntensityRange",
        "micsFiltered": "421.outputMicrographs",
        "micsNoFiltered": "1047.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "600",
        "object.label": "cistem - ctffind",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputType": 1,
        "avgFrames": 3,
        "usePowerSpectra": false,
        "windowSize": 512,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 500.0,
        "slowSearch": false,
        "fixAstig": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 8,
        "inputMicrographs": "562.outputMicrographs"
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "655",
        "object.label": "xmipp3 - ctf consensus B",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useDefocus": false,
        "minDefocus": 4000.0,
        "maxDefocus": 40000.0,
        "useAstigmatism": false,
        "astigmatism": 1000.0,
        "useAstigmatismPercentage": false,
        "astigmatismPer": 0.1,
        "useResolution": true,
        "resolution": 8.0,
        "useCritXmipp": false,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.0,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 9.0,
        "calculateConsensus": false,
        "minConsResol": 15.0,
        "averageDefocus": false,
        "includeSecondary": false,
        "inputCTF": "600.outputCTF"
    },
    {
        "object.className": "SphireProtCRYOLOPicking",
        "object.id": "713",
        "object.label": "sphire - cryolo picking",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputModelFrom": 0,
        "conservPickVar": 0.3,
        "lowPassFilter": true,
        "absCutOffFreq": 0.1,
        "numCpus": 20,
        "input_size": 1024,
        "boxSize": 0,
        "max_box_per_image": 700,
        "useGpu": true,
        "gpuList": "3, 4",
        "boxSizeFactor": 1.0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "1737.outputMicrographs"
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "762",
        "object.label": "relion - 2D classification",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": true,
        "maskDiameterA": -1,
        "maskZero": 0,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 50,
        "regularisationParamT": 2.0,
        "useGradientAlg": true,
        "numberOfVDAMBatches": 200,
        "centerAvg": true,
        "numberOfIterations": 25,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 6.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "allowCoarserSampling": false,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "allParticlesRam": false,
        "useScratch": 0,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "0, 1, 2, 3",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "inputParticles": "925.outputParticles"
    },
    {
        "object.className": "ProtRelionSelectClasses2D",
        "object.id": "839",
        "object.label": "relion - 2D class ranker",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocol": "762.",
        "minThreshold": 0.1,
        "minResolution": 25.0,
        "minParts": -1,
        "minCls": -1
    },
    {
        "object.className": "ProtBoxSizeParameters",
        "object.id": "876",
        "object.label": "pwem - box size related parameters",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "boxSize": "713.boxsize",
        "boolExtractPartBx": true,
        "factorExtractPartBx": 1.8,
        "boolGautomatchParams": false,
        "factorGautRadius": 0.75,
        "factorGautMinInterPartDist": 0.9,
        "factorGautSigmaDiameter": 1.2,
        "factorGautAvgDiameter": 1.5,
        "boolRelionParams": false,
        "factorMinLoGFilter": 0.95,
        "factorMaxLoGFilter": 1.05,
        "boolTopazParams": false,
        "factorTopazRadius": 0.45,
        "numPartPerImg": 300,
        "boolConsensusParams": false,
        "factorConsensusRadius": 0.9,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMicrographs": "1737.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "925",
        "object.label": "xmipp3 - extract particles",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "boxSize": "876.boxSizeExtraction",
        "doResize": true,
        "resizeOption": 1,
        "downFactor": 1.0,
        "resizeDim": 128,
        "resizeSamplingRate": 1.0,
        "boxSizeForced": -1,
        "doBorders": false,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": false,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 6,
        "numberOfMpi": 1,
        "inputCoordinates": "713.outputCoordinates",
        "ctfRelations": "1737.outputCTF"
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "979",
        "object.label": "motioncorr - movie alignment A",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 60,
        "binFactor": 2.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "splitEvenOdd": false,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "extraProtocolParams": "",
        "gpuList": "2, 3",
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 1,
        "groupLocal": 4,
        "tol": 0.2,
        "doSaveUnweightedMic": false,
        "extraParams2": "",
        "gainRot": 0,
        "gainFlip": 1,
        "defectFile": null,
        "defectMap": null,
        "EERtext": null,
        "eerGroup": 32,
        "eerSampling": 0,
        "doMagCor": false,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "inputMovies": "326.outputMoviesSS"
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "1047",
        "object.label": "motioncorr - movie alignment B",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 60,
        "binFactor": 2.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "splitEvenOdd": false,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "extraProtocolParams": "",
        "gpuList": "0, 1",
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 1,
        "groupLocal": 4,
        "tol": 0.2,
        "doSaveUnweightedMic": false,
        "extraParams2": "",
        "gainRot": 0,
        "gainFlip": 1,
        "defectFile": null,
        "defectMap": null,
        "EERtext": null,
        "eerGroup": 32,
        "eerSampling": 0,
        "doMagCor": false,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "inputMovies": "1153.outputMoviesSS"
    },
    {
        "object.className": "smartscopeSimulator",
        "object.id": "1115",
        "object.label": "smartscope - Simulator A",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocol": "180.",
        "intensityRange": "952.IntensityRange",
        "micsFiltered": "122.outputMicrographs",
        "micsNoFiltered": "979.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "ProtSubSet",
        "object.id": "1153",
        "object.label": "subset B",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "chooseAtRandom": false,
        "nElements": 2,
        "selectIds": true,
        "range": "301-450",
        "setOperation": 0,
        "inputFullSet": "180.MoviesSS"
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "1193",
        "object.label": "motioncorr - movie alignment C",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 60,
        "binFactor": 2.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "splitEvenOdd": false,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "extraProtocolParams": "",
        "gpuList": "0, 1, 2, 3",
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 1,
        "groupLocal": 4,
        "tol": 0.2,
        "doSaveUnweightedMic": false,
        "extraParams2": "",
        "gainRot": 0,
        "gainFlip": 1,
        "defectFile": null,
        "defectMap": null,
        "EERtext": null,
        "eerGroup": 32,
        "eerSampling": 0,
        "doMagCor": false,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "inputMovies": "522.outputMoviesSS"
    },
    {
        "object.className": "smartscopeFeedbackFilter",
        "object.id": "1455",
        "object.label": "smartscope - Feedback filter A",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocol": "180.",
        "triggerMicrograph": 50,
        "emptyBinsPercent": 7,
        "simulator": true,
        "refreshMethod": 0,
        "refreshTime": 240,
        "refreshMics": 200,
        "micsPassFilter": "421.outputMicrographs",
        "micsAll": "1115.outputMicrographs"
    },
    {
        "object.className": "smartscopeConnection",
        "object.id": "1498",
        "object.label": "smartscope - Connection",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "sessionName": "LH11_3",
        "refreshMethod": 0,
        "refreshTime": 240,
        "refreshMovies": 200,
        "TotalTime": 86400,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "smartscopeSimulator",
        "object.id": "1644",
        "object.label": "smartscope - Simulator C",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocol": "180.",
        "intensityRange": "5836.IntensityRange",
        "micsFiltered": "655.outputMicrographs",
        "micsNoFiltered": "2257.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "1682",
        "object.label": "cistem - ctffind",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputType": 1,
        "avgFrames": 3,
        "usePowerSpectra": false,
        "windowSize": 512,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 500.0,
        "slowSearch": false,
        "fixAstig": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 8,
        "inputMicrographs": "1644.outputMicrographs"
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "1737",
        "object.label": "xmipp3 - ctf consensus",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useDefocus": true,
        "minDefocus": 4000.0,
        "maxDefocus": 40000.0,
        "useAstigmatism": true,
        "astigmatism": 1000.0,
        "useAstigmatismPercentage": false,
        "astigmatismPer": 0.1,
        "useResolution": true,
        "resolution": 8.0,
        "useCritXmipp": false,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.0,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 9.0,
        "calculateConsensus": false,
        "minConsResol": 15.0,
        "averageDefocus": false,
        "includeSecondary": false,
        "inputCTF": "1682.outputCTF"
    },
    {
        "object.className": "smartscopeFeedbackFilter",
        "object.id": "1795",
        "object.label": "smartscope - Feedback filter B",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocol": "180.",
        "triggerMicrograph": 50,
        "emptyBinsPercent": 7,
        "simulator": true,
        "refreshMethod": 0,
        "refreshTime": 240,
        "refreshMics": 200,
        "micsAll": "562.outputMicrographs",
        "micsPassFilter": "655.outputMicrographs"
    },
    {
        "object.className": "ProtRelionSelectClasses2D",
        "object.id": "1838",
        "object.label": "relion - 2D class ranker",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocol": "762.",
        "minThreshold": 0.15,
        "minResolution": 15.0,
        "minParts": -1,
        "minCls": -1
    },
    {
        "object.className": "ProtCryo2D",
        "object.id": "1875",
        "object.label": "cryosparc2 - 2D classification",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "numberOfClasses": 50,
        "maximunResolution": 6,
        "initialClassification": 2.0,
        "useCircular2D": true,
        "class2D_window_inner_A": null,
        "class2D_window_outer_A": null,
        "reCenter2D": true,
        "reCenterMask": 0.2,
        "reCenterMaskBinary": false,
        "class2D_estimate_in_plane_pose": false,
        "forceMaxover": true,
        "ctfFlipPhases": false,
        "numberFinalIterator": 1,
        "numberOnlineEMIterator": 20,
        "batchSizeClass": 100,
        "initialScale2D": 1,
        "zeropadFactor": 2,
        "useFRCRegularized": true,
        "useFullFRC": true,
        "iterationToStartAnneling": 2,
        "iterationToStartAnneal": 15,
        "useWhiteNoiseModel": false,
        "compute_use_ssd": false,
        "compute_lane": "default",
        "compute_num_gpus": 1,
        "inputParticles": "925.outputParticles"
    },
    {
        "object.className": "ProtClassesSelector",
        "object.id": "1933",
        "object.label": "pwem - numeric classes extractor",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "extractRepresentative": true,
        "firstNElements": 40,
        "inputClasses": "1875.outputClasses"
    },
    {
        "object.className": "CryoassessProt2D",
        "object.id": "1968",
        "object.label": "cryoassess - assess 2D classes",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "batchSize": 32,
        "inputRefs": "1933.output"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "2002",
        "object.label": "pwem - ProtUserSubSet",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputObject": "1875.",
        "other": "6365",
        "sqliteFile": "Runs/006654_ProtCryo2D/classes2D_state.sqlite,",
        "outputClassName": "SetOfClasses2D"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "2038",
        "object.label": "pwem - ProtUserSubSet",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Logs/selection_20250718103452.txt,",
        "outputClassName": "SetOfParticles",
        "inputObject": "2002.outputClasses2D"
    },
    {
        "object.className": "ProtCryoSparcInitialModel",
        "object.id": "2074",
        "object.label": "cryosparc2 - initial model",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "abinit_K": 2,
        "abinit_max_res": 12.0,
        "abinit_init_res": 35.0,
        "abinit_num_init_iters": 200,
        "abinit_num_final_iters": 300,
        "abinit_radwn_step": 0.04,
        "abinit_window": true,
        "abinit_center": true,
        "abinit_scale_mg_correct": false,
        "abinit_scale_compute": false,
        "abinit_mom": 0.0,
        "abinit_sparsity": 0.0,
        "abinit_minisize_init": 90,
        "abinit_minisize": 300,
        "abinit_minisize_epsilon": 0.05,
        "abinit_minisize_minp": 0.01,
        "abinit_minisize_num_init_iters": 300,
        "abinit_noise_model": 0,
        "abinit_noise_priorw": 50,
        "abinit_noise_initw": 5000,
        "abinit_class_anneal_beta": 0.1,
        "abinit_class_anneal_start": 300,
        "abinit_class_anneal_end": 350,
        "abinit_target_initial_ess_fraction": 0.011,
        "symmetryGroup": 0,
        "symmetryOrder": 1,
        "abinit_r_grid": 25.0,
        "abinit_high_lr_duration": 100.0,
        "abinit_high_lr": 0.4,
        "abinit_nonneg": true,
        "abinit_ignore_dc": true,
        "abinit_init_radwn_cutoff": 7,
        "abinit_search_start_iter": 200,
        "abinit_use_engine": true,
        "intermediate_plots": true,
        "compute_use_ssd": false,
        "compute_lane": "standard",
        "inputParticles": "2038.outputParticles"
    },
    {
        "object.className": "ProtCryoSparcNewNonUniformRefine3D",
        "object.id": "2144",
        "object.label": "cryosparc2 - 3D non-uniform refinement",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "symmetryGroup": 0,
        "symmetryOrder": 1,
        "refine_symmetry_do_align": true,
        "refine_do_init_scale_est": true,
        "refine_num_final_iterations": 0,
        "refine_res_init": 30,
        "refine_res_gsfsc_split": 20,
        "refine_highpass_res": null,
        "refine_clip": false,
        "refine_window": true,
        "refine_skip_premult": true,
        "refine_ignore_dc": true,
        "refine_batchsize_init": 0,
        "refine_batchsize_epsilon": 0.001,
        "refine_batchsize_snrfactor": 40.0,
        "refine_scale_min": false,
        "refine_scale_start_iter": 0,
        "refine_noise_model": 0,
        "refine_noise_priorw": 50,
        "refine_noise_initw": 200,
        "refine_noise_init_sigmascale": 3,
        "refine_mask": 0,
        "refine_dynamic_mask_thresh_factor": 0.2,
        "refine_dynamic_mask_near_ang": 6.0,
        "refine_dynamic_mask_far_ang": 14.0,
        "refine_dynamic_mask_start_res": 12,
        "refine_dynamic_mask_use_abs": false,
        "refine_compute_batch_size": null,
        "refine_defocus_refine": false,
        "crl_num_plots": 3,
        "crl_min_res_A": 20.0,
        "crl_df_range": 2000.0,
        "crl_compute_batch_size": null,
        "refine_ctf_global_refine": false,
        "crg_num_plots": 3,
        "crg_min_res_A": 10.0,
        "crg_do_tilt": true,
        "crg_do_trefoil": true,
        "crg_do_spherical": true,
        "crg_do_tetrafoil": true,
        "crg_compute_batch_size": null,
        "refine_do_ews_correct": false,
        "refine_do_ews_correct_align": false,
        "refine_ews_zsign": 0,
        "refine_ews_simple": 0,
        "compute_use_ssd": false,
        "compute_lane": "standard",
        "refine_do_marg": true,
        "refine_nu_enable": true,
        "refine_nu_filtertype": 0,
        "refine_nu_order": 8,
        "refine_nu_awf": 3.0,
        "inputParticles": "2038.outputParticles",
        "referenceVolume": "2074.outputVolumes.2"
    },
    {
        "object.className": "XmippProtMovieMaxShift",
        "object.id": "2257",
        "object.label": "xmipp3 - movie maxshift",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "rejType": 3,
        "maxFrameShift": 5.0,
        "maxMovieShift": 15.0,
        "inputMovies": "1193.outputMovies"
    }
]